<?xml version="1.0" encoding="UTF-8"?>
<apex:apex xmlns:xsi="http://www.w3.org/2001/XMLSchema-instance"
 xsi:schemaLocation="http://med.kuleuven.be/exporl/apex/3.0.4/experiment https://gilbert.med.kuleuven.be/apex/schemas/3.0.4/experiment.xsd"
 xmlns:apex="http://med.kuleuven.be/exporl/apex/3.0.4/experiment" version="1">
    <procedure xsi:type="apex:multiProcedureType">
        <parameters>
            <order>random</order>
        </parameters>
        <procedure xsi:type="apex:constantProcedureType" id="procedure1">
            <parameters>
                <presentations>4</presentations>
                <order>random</order>
                <choices select="2">2</choices>
                <pause_between_stimuli>800</pause_between_stimuli>
            </parameters>
            <trials>
                <trial id="trial11">
                    <screen id="screen1"/>
                    <stimulus id="stim1"/>
                    <standard id="stimref1"/>
                </trial>
                <trial id="trial12">
                    <screen id="screen1"/>
                    <stimulus id="stim2"/>
                    <standard id="stimref1"/>
                </trial>
                <trial id="trial13">
                    <screen id="screen1"/>
                    <stimulus id="stim3"/>
                    <standard id="stimref1"/>
                </trial>
                <trial id="trial14">
                    <screen id="screen1"/>
                    <stimulus id="stim4"/>
                    <standard id="stimref1"/>
                </trial>
                <trial id="trial15">
                    <screen id="screen1"/>
                    <stimulus id="stim5"/>
                    <standard id="stimref1"/>
                </trial>
                <trial id="trial16">
                    <screen id="screen1"/>
                    <stimulus id="stim6"/>
                    <standard id="stimref1"/>
                </trial>
                <trial id="trial17">
                    <screen id="screen1"/>
                    <stimulus id="stim7"/>
                    <standard id="stimref1"/>
                </trial>
                <trial id="trial18">
                    <screen id="screen1"/>
                    <stimulus id="stim8"/>
                    <standard id="stimref1"/>
                </trial>
                <trial id="trial19">
                    <screen id="screen1"/>
                    <stimulus id="stim9"/>
                    <standard id="stimref1"/>
                </trial>
            </trials>
        </procedure>
        <procedure xsi:type="apex:constantProcedureType" id="procedure2">
            <parameters>
                <presentations>4</presentations>
                <order>random</order>
                <choices select="2">2</choices>
                <pause_between_stimuli>800</pause_between_stimuli>
            </parameters>
            <trials>
                <trial id="trial21">
                    <screen id="screen1"/>
                    <stimulus id="stim1"/>
                    <standard id="stimref2"/>
                </trial>
                <trial id="trial22">
                    <screen id="screen1"/>
                    <stimulus id="stim2"/>
                    <standard id="stimref2"/>
                </trial>
                <trial id="trial23">
                    <screen id="screen1"/>
                    <stimulus id="stim3"/>
                    <standard id="stimref2"/>
                </trial>
                <trial id="trial24">
                    <screen id="screen1"/>
                    <stimulus id="stim4"/>
                    <standard id="stimref2"/>
                </trial>
                <trial id="trial25">
                    <screen id="screen1"/>
                    <stimulus id="stim5"/>
                    <standard id="stimref2"/>
                </trial>
                <trial id="trial26">
                    <screen id="screen1"/>
                    <stimulus id="stim6"/>
                    <standard id="stimref2"/>
                </trial>
                <trial id="trial27">
                    <screen id="screen1"/>
                    <stimulus id="stim7"/>
                    <standard id="stimref2"/>
                </trial>
                <trial id="trial28">
                    <screen id="screen1"/>
                    <stimulus id="stim8"/>
                    <standard id="stimref2"/>
                </trial>
                <trial id="trial29">
                    <screen id="screen1"/>
                    <stimulus id="stim9"/>
                    <standard id="stimref2"/>
                </trial>
            </trials>
        </procedure>
    </procedure>
    <corrector xsi:type="apex:isequal"/>
    <screens>
        <general>
            <repeatbutton>true</repeatbutton>
            <showpanel>true</showpanel>
            <showmenu>true</showmenu>
        </general>
        <reinforcement>
            <progressbar>true</progressbar>
            <feedback>false</feedback>
        </reinforcement>
        <screen id="screen1">
            <gridLayout height="4" width="1" id="main_layout">
                <gridLayout width="3" height="1" columnstretch="1,2,1" rowstretch="1" y="1">
                    <label id="label_1" x="2" y="1">
                        <text>How much does the second stimulus fluctuate with respect to the first one?</text>
                    </label>
                </gridLayout>
                <gridLayout width="5" height="1" columnstretch="1,1,1,1,1" rowstretch="1" y="2">
                    <label id="label_2" x="1">
                        <text>None</text>
                    </label>
                    <label id="label_3" x="2">
                        <text>Half</text>
                    </label>
                    <label id="label_4" x="3">
                        <text>Equal</text>
                    </label>
                    <label id="label_5" x="5">
                        <text>Double</text>
                    </label>
                </gridLayout>
                <gridLayout width="3" height="1" columnstretch="1,8,1" rowstretch="1" y="3">
                    <slider id="slider_1" x="2">
                        <orientation>horizontal</orientation>
                        <min>0</min>
                        <max>200</max>
                        <value>100</value>
                        <tickinterval>25</tickinterval>
                        <stepsize>1</stepsize>
                        <pagesize>5</pagesize>
                    </slider>    
                </gridLayout>
                <gridLayout width="3" height="1" columnstretch="1,2,1" rowstretch="1" y="4">
                    <button id="button11" x="2">
                        <text>Next</text>
                    </button>
                </gridLayout>
            </gridLayout>
            <default_answer_element>button11</default_answer_element>
        </screen>
    </screens>
    <datablocks>
        <uri_prefix source="apexconfig">stimuli</uri_prefix>
        <datablock id="datablockcaltone">
            <device>wavdevice</device>
            <uri>tone-fc_1000-SPL_0-fs_44100-N_352800.wav</uri>
        </datablock>
        <datablock id="datablockref1">
            <device>wavdevice</device>
            <uri>AM_tone-fm_4.00-fc_1000-md_40-SPL_70-w_25-fs_44100-N_88200.wav</uri>
        </datablock>
        <datablock id="datablockref2">
            <device>wavdevice</device>
            <uri>AM_tone-fm_0.50-fc_1000-md_40-SPL_70-w_25-fs_44100-N_176400.wav</uri>
        </datablock>
        <datablock id="datablock1">
            <device>wavdevice</device>
            <uri>AM_tone-fm_0.00-fc_1000-md_40-SPL_70-w_25-fs_44100-N_88200.wav</uri>
        </datablock>
        <datablock id="datablock2">
            <device>wavdevice</device>
            <uri>AM_tone-fm_0.25-fc_1000-md_40-SPL_70-w_25-fs_44100-N_176400.wav</uri>
        </datablock>
        <datablock id="datablock3">
            <device>wavdevice</device>
            <uri>AM_tone-fm_0.50-fc_1000-md_40-SPL_70-w_25-fs_44100-N_176400.wav</uri>
        </datablock>
        <datablock id="datablock4">
            <device>wavdevice</device>
            <uri>AM_tone-fm_1.00-fc_1000-md_40-SPL_70-w_25-fs_44100-N_132300.wav</uri>
        </datablock>
        <datablock id="datablock5">
            <device>wavdevice</device>
            <uri>AM_tone-fm_2.00-fc_1000-md_40-SPL_70-w_25-fs_44100-N_88200.wav</uri>
        </datablock>
        <datablock id="datablock6">
            <device>wavdevice</device>
            <uri>AM_tone-fm_4.00-fc_1000-md_40-SPL_70-w_25-fs_44100-N_88200.wav</uri>
        </datablock>
        <datablock id="datablock7">
            <device>wavdevice</device>
            <uri>AM_tone-fm_8.00-fc_1000-md_40-SPL_70-w_25-fs_44100-N_88200.wav</uri>
        </datablock>
        <datablock id="datablock8">
            <device>wavdevice</device>
            <uri>AM_tone-fm_16.00-fc_1000-md_40-SPL_70-w_25-fs_44100-N_88200.wav</uri>
        </datablock>
        <datablock id="datablock9">
            <device>wavdevice</device>
            <uri>AM_tone-fm_32.00-fc_1000-md_40-SPL_70-w_25-fs_44100-N_88200.wav</uri>
        </datablock>
    </datablocks>
    <devices>
        <device id="wavdevice" xsi:type="apex:wavDeviceType">
            <driver>portaudio</driver>
            <card>default</card>
            <channels>2</channels>
            <samplerate>44100</samplerate>
        </device>
    </devices>
    <filters>
        <filter xsi:type="apex:amplifier" id="ampMain">
            <device>wavdevice</device>
            <channels>2</channels>
            <gain channel="0" id="gain0">0.0</gain>
            <gain channel="1" id="gain1">0.0</gain>
        </filter>
    </filters>
    <stimuli>
        <fixed_parameters/>
        <stimulus id="stimcaltone">
            <datablocks>
                <sequential>
                    <datablock id="datablockcaltone"/>
                </sequential>
            </datablocks>
        </stimulus>
        <stimulus id="stimref1">
            <datablocks>
                <sequential>
                    <datablock id="datablockref1"/>
                </sequential>
            </datablocks>
        </stimulus>
        <stimulus id="stimref2">
            <datablocks>
                <sequential>
                    <datablock id="datablockref2"/>
                </sequential>
            </datablocks>
        </stimulus>
        <stimulus id="stim1">
            <datablocks>
                <sequential>
                    <datablock id="datablock1"/>
                </sequential>
            </datablocks>
        </stimulus>
        <stimulus id="stim2">
            <datablocks>
                <sequential>
                    <datablock id="datablock2"/>
                </sequential>
            </datablocks>
        </stimulus>
        <stimulus id="stim3">
            <datablocks>
                <sequential>
                    <datablock id="datablock3"/>
                </sequential>
            </datablocks>
        </stimulus>
        <stimulus id="stim4">
            <datablocks>
                <sequential>
                    <datablock id="datablock4"/>
                </sequential>
            </datablocks>
        </stimulus>
        <stimulus id="stim5">
            <datablocks>
                <sequential>
                    <datablock id="datablock5"/>
                </sequential>
            </datablocks>
        </stimulus>
        <stimulus id="stim6">
            <datablocks>
                <sequential>
                    <datablock id="datablock6"/>
                </sequential>
            </datablocks>
        </stimulus>
        <stimulus id="stim7">
            <datablocks>
                <sequential>
                    <datablock id="datablock7"/>
                </sequential>
            </datablocks>
        </stimulus>
        <stimulus id="stim8">
            <datablocks>
                <sequential>
                    <datablock id="datablock8"/>
                </sequential>
            </datablocks>
        </stimulus>
        <stimulus id="stim9">
            <datablocks>
                <sequential>
                    <datablock id="datablock9"/>
                </sequential>
            </datablocks>
        </stimulus>
    </stimuli>
    <connections>
        <connection>
            <from>
                <id>_ALL_</id>
                <channel>0</channel>
            </from>
            <to>
                <id>ampMain</id>
                <channel>0</channel>
            </to>
        </connection>
        <connection>
            <from>
                <id>_ALL_</id>
                <channel>0</channel>
            </from>
            <to>
                <id>ampMain</id>
                <channel>1</channel>
            </to>
        </connection>
        <connection>
            <from>
                <id>ampMain</id>
                <channel>0</channel>
            </from>
            <to>
                <id>wavdevice</id>
                <channel>0</channel>
            </to>
        </connection>
        <connection>
            <from>
                <id>ampMain</id>
                <channel>1</channel>
            </from>
            <to>
                <id>wavdevice</id>
                <channel>1</channel>
            </to>
        </connection>
    </connections>
    <calibration profile="outs-2">
        <stimuli>
            <stimulus id="stimcaltone"/>
        </stimuli>
        <parameters>
            <parameter id="gain0">
                <targetamplitude>97</targetamplitude>
                <calibrationamplitude>97</calibrationamplitude>
                <mute>-150.0</mute>
                <max>50</max>
            </parameter>
            <parameter id="gain1">
                <targetamplitude>97</targetamplitude>
                <calibrationamplitude>97</calibrationamplitude>
                <mute>-150.0</mute>
                <max>50</max>
            </parameter>
        </parameters>
    </calibration>
    <results>
        <xsltscript>apexresult.xsl</xsltscript>
        <saveprocessedresults>true</saveprocessedresults>
    </results>
    <general>
        <autosave>true</autosave>
    </general>
</apex:apex>
